CellProfiler Pipeline: http://www.cellprofiler.org
Version:4
DateRevision:319
GitHash:
ModuleCount:8
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:No
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
NamesAndTypes:[module_num:3|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
    Assign a name to:All images
    Select the image type:Grayscale image
    Name to assign these images:DNA
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    Set intensity range from:Image metadata
    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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
    Select the input image:DNA
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):10,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifySecondaryObjects:[module_num:6|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
    Select the input objects:IdentifyPrimaryObjects
    Name the objects to be identified:IdentifySecondaryObjects
    Select the method to identify the secondary objects:Propagation
    Select the input image:DNA
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:10
    Threshold strategy:Global
    Thresholding method:Minimum cross entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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
ConvertObjectsToImage:[module_num:7|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
    Select the input objects:IdentifySecondaryObjects
    Name the output image:CellImage
    Select the color format:uint16
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
SaveImages:[module_num:8|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
    Select the type of image to save:Image
    Select the image to save:CellImage
    Select method for constructing file names:From image filename
    Select image name for file prefix:DNA
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    Append a suffix to the image file name?:Yes
    Text to append to the image name:_segmentation
    Saved file format:tiff
    Output file location:Default Output Folder|
    Image bit depth:16-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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